//preps and runs the Cytometry Plate for each set of plates (aka lineage)
//This method needs to have the reader variable set to a plate reader name
//        and the readEndTime variable set to either {readEndTime1} or {readEndTime2}

Set(clearTipsLineage, {lineage})
Set(cytomTipsNeeded, 96)
Set(cytomPipettingTime, 420)
#InsertVariables

//Clear tip rack after all growth plate preps are done
If({clearTipsLineage}==1, Overlord({clearTipRackOvp}))
If({clearTipsLineage}==1, WaitFor(Overlord))

ReadScript(Common protocol scripts\Need Tips.lmsf, tips300Need = {cytomTipsNeeded}, clearTipRack = false)

//Set up timer to wait for reader to get close to finished before starting pipetting method
Math(cytometryStartTime, {readEndTime} - 1800)

Timer({cytometryStartTime})
WaitFor(Timer)
//cytometryPlateNum tells Hamilton Venus which cytometry plate to use
Set(cytometryPlateNum, {lineage})
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{cytometryPrepMethod})
Timer(300)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

Timer({readEndTime})
WaitFor(Timer)
WaitFor({reader})
Gen5({reader}, CarrierOut)
WaitFor({reader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{reader}")
WaitFor(Overlord)

Gen5({reader}, CarrierIn)
WaitFor({reader}, false)

Set(worklistFile, {dataDirectory}\{experimentId}_cytom-plate_{lineage}-{plateNum}.csv)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{cytometryTransferMethod})
Timer({cytomPipettingTime})
WaitFor(Timer)
WaitFor(S-Cell-STAR)
