
Set(sub_project, notAssigned)
Set(queueDirectory, notAssigned)
Set(inducer1, notAssigned)
Set(inducer2, notAssigned)
Set(media, notAssigned)
Set(percentDMSO, 0)
Set(dilutionSeriesFactor, 3)

#InsertVariables

//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//No DNA extraction for this version of the script
Set(keepOldGrowthPlate, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(Common protocol scripts\Set Common Directories.lmsf)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specific to this experiment
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Cytometry for 6 variants)
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, GSF-IMS Project\E. coli\Cytometry for 12 variants)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(initHHCMethod, Turn on pre-heat HHC.hsl)
Set(startMethod, Uniform non-selective plate prep plus bacteria.1 strain.6 plasmids.hsl)
Set(nonSelectiveGradientMethod, Inducer gradient plate prep_2 gradients per row.hsl)
Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
//New version of Plate pre-heating method takes 11 minutes to run - leaves HHC on all the time
Set(preHeatPlateTime, 660)
Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(cytometryPrepMethod, Prep cytometry plate.hsl)
Set(cytometryTransferMethod, Transfer cells from old GP to Cytometry Plate_2 gradients per row.hsl)
//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)

//Set readers to be used
Set(reader1, Neo)

/////////////////////////////////////////
//Set any other short-hand dictionary keys that will be used repeatedly
Set(getNewGrowthPlate, {ovpCommDirectory}\Labware\Move Tips and New Growth Plate to STAR.ovp)
Set(clearTipRackOvp, {ovpCommDirectory}\Labware\Move Tips from STAR to Waste.ovp)
/////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section

StartPrompt(E. Coli Fitness Selection, {scriptDir}\Cytometry.12 half-rows.6 plasmids.2 inducers-list.txt)

UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)
UserPrompt(Check STAR Hamilton Tips, Make sure there are at least 116 1000 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 1000.PNG)
UserPrompt(Check STAR Hamilton Tips, Make sure there are two full racks of 300 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 300.PNG)

Set(msg2, Make sure there are at least two racks of 300 uL tips in the PAA Carousel (hotel no. 2).\n)
UserPrompt(Tips, {msg2}, {lmsfImageDirectory}\Tip Hotel 2.png)
Set(tips300Index, 2)
Set(tips1000Index, 0)
Set(tips50Index, 0)

Set(msg2, Load 3 growth plates with lids into stack no. 7 of the PAA Carousel.\n)
UserPrompt(Load Growth Plates, {msg2}, {lmsfImageDirectory}\growth plate stack.PNG)

NewXML(growth plate prep)

If({sub_project}==notAssigned, Get(sub-project, sub_project, Select the sub-project (determines Gen5 protocols):))

GetExpID({startDate}_{sub_project}-Cytom-6-plasmids)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\set_gen5_protocols_by_sub-project.lmsf, sub_project_in = {sub_project})

Overlord({ovpCommDirectory}\Initialize Robot Carousel Sealer and Pealer.ovp)

Get(user, user)

//Get media info from user if needed (i.e., if not assigned at #InsertVariables)
If({media} != notAssigned, Set(msg1, The media for this experiment should be {media}))
If({percentDMSO} != 0, Set(msg2, with {percentDMSO}% DMSO))
If({percentDMSO} == 0, Set(msg2, ))
If({media} != notAssigned, UserPrompt(Media, {msg1} {msg2}.))
If({media} == notAssigned, Get(media, media))

If({queueDirectory}==notAssigned, Set(queueDirectory, {scriptDir}))

Set(msg1, Open the file strain_plasmids_6.txt from today's folder in the LMSF Queue: {queueDirectory}.\nThen, verify that it contains the appropriate information for this experiment.)
Set(msg2, One strain and 12 plasmids for rows B-G of the first set of growth plates and rows B-G of the second set of growth plates.)

Set(msg5, \n\nThe LMSF Queue is on the JCloud at: \\resdata-smb\JCloud2\Shared_Data\LMSF Queue.)
Set(msg6, \nIt should be pinned to the Quick Access in the Windows file browser.)

If({queueDirectory}=={scriptDir}, Set(msg1, Open the file strain_plasmids_6.txt and edit it to contain the appropriate information for this experiment.))
If({queueDirectory}=={scriptDir}, Set(msg5, \nThe file should be in the folder: {scriptDir}.))
If({queueDirectory}=={scriptDir}, Set(msg6, ))

UserPrompt(Strain and Plasmids, {msg1}\n{msg2}{msg5}{msg6})

ImportDictionary({queueDirectory}\strain_plasmids_6.txt)

AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid2})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid3})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid4})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid5})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid6})

//Need to set these to avoid error in Set_params_for_plates... sub-script
Set(plasmid7, none)
Set(plasmid8, none)
Set(plasmid9, none)
Set(plasmid10, none)
Set(plasmid11, none)
Set(plasmid12, none)

//Get inducer info from user if needed (i.e., if not assigned at #InsertVariables)
Set(needsInducerInput, false)
If({inducer1} ==  notAssigned, Set(needsInducerInput, true))

If({needsInducerInput} ==  true, Get(additive, inducer1, Select the first ligand:))
If({needsInducerInput} ==  true, Get(concentration, inducer1Stock, Enter the concentration of the {inducer1} starting stock:))
If({needsInducerInput} ==  true, Get(additive, inducer2, Select the second ligand:))
If({needsInducerInput} ==  true, Get(concentration, inducer2Stock, Enter the concentration of the {inducer2} starting stock:))

//These lines needed to avoid errors:
Set(msg1a, temp)
Set(msg1b, temp)
Set(msg2, temp)

If({needsInducerInput} !=  true, Set(inducer1Stock, {inducer1StockConc} {inducer1StockUnits}))
If({needsInducerInput} !=  true, Set(msg1a, {inducer1} stock concentration should be {inducer1Stock}.))
If({needsInducerInput} !=  true, Set(inducer2Stock, {inducer2StockConc} {inducer2StockUnits}))
If({needsInducerInput} !=  true, Set(msg1b, {inducer2} stock concentration should be {inducer2Stock}.))

If({needsInducerInput} !=  true, Set(msg2, At least 15 mL of each inducer stock is needed for this experiment.))
If({needsInducerInput} !=  true, UserPrompt(Inducer Stocks, {msg1a}\n{msg1b}\n{msg2}))

Get(note, note)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)
Set(msg2, \tMedia: \t\t\t{media}\n\n)
Set(msg3, \tBacteria strain: \t\t{strain1}\n)
Set(msg4, \t\tPlasmidB1: \t{plasmid1}\n)
Set(msg5, \t\tPlasmidC1: \t{plasmid2}\n)
Set(msg6, \t\tPlasmidD1: \t{plasmid3}\n)
Set(msg7, \t\tPlasmidE1: \t{plasmid4}\n)
Set(msg8, \t\tPlasmidF1: \t{plasmid5}\n)
Set(msg9, \t\tPlasmidG1: \t{plasmid6}\n\n)

Set(msg16a, \tInducer 1: \t{inducer1}, stock concentration: {inducer1Stock}\n)
Set(msg16b, \tInducer 2: \t{inducer2}, stock concentration: {inducer2Stock}\n\n)
Set(msg17, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
Set(msg18, \n\n\{overNightProtocol1}\n{repeatProtocol})
UserPrompt(Review Experiment Details: {experimentId}, {msg1}{msg2}{msg3}{msg4}{msg5}{msg6}{msg7}{msg8}{msg9}{msg16a}{msg16b}{msg17}{msg18})

Set(msg1, Set up the STAR deck layout as shown.)
UserPrompt(STAR Deck Layout, {msg1}, {scriptDir}\STAR Deck Layout.12 rows.6 plasmids.2 inducers.PNG, 1000)

Set(msg1, Load the first set of 6 bacteria stocks in tube positions 10-15:)
Set(msg2b, \n\tPosition 10: {plasmid1})
Set(msg2c, \n\tPosition 11: {plasmid2})
Set(msg2d, \n\tPosition 12: {plasmid3})
Set(msg2e, \n\tPosition 13: {plasmid4})
Set(msg2f, \n\tPosition 14: {plasmid5})
Set(msg2g, \n\tPosition 15: {plasmid6})
Set(msg3, \n\nThen click 'OK' to continue.)
UserPrompt(STAR Deck Layout, {msg1}{msg2b}{msg2c}{msg2d}{msg2e}{msg2f}{msg2g}{msg3}, {scriptDir}\STAR Deck Layout.bacteria1.PNG, 800)

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.no Abgene.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR successfully moved the lids click 'OK' to start the experiment.)
// end lid movement test


WaitFor(Overlord)
//End User input and Overlord initialization section
//////////////////////////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////////////////////////
//Run the protocol
////////////////////////////////////////////////////////////////////////////////////

//--- 0 ------------------------------------------------------------------------------

//Test readers while 1st plate is pipetting
Gen5({reader1}, CarrierOut)
WaitFor({reader1}, false)
Set(msg, Plate reader {reader1} and should have its carrier out. \nVerify that the carrier is out and empty, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
Gen5({reader1}, RunExp, {initProtocol}, pre-run-test-1, {dataDirectory})

Set(msg, Switch to STAR computer to edit tip counters, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Edit Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Set(preHeatTemperature, 67)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{initHHCMethod})
WaitFor(S-Cell-STAR)
Set(msg, Verify that HHC no. 1 is now set to pre-heat temperature, then Click 'OK' to continue.)
UserPrompt(Check Pre-Heat HHC, {msg})

//--- Plate 1 ------------------------------------------------------------------------------
Set(plateNum, 1)
Set(platesInStack, 3)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_12_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_1.lmsf, reader = {reader1})

Set(cytometryReadyTime, {readEndTime1})
Math(cytometryReadyTime, {cytometryReadyTime} + {repeatProtocolTime})
Math(cytometryReadyTime, {cytometryReadyTime} + {repeatProtocolTime})
Math(cytometryReadyTime, {cytometryReadyTime} + 1200)
Set(msg1, Dispose of the bacteria stocks.\n)
Set(msg2, Then click 'OK' to continue the experiment.)
Set(msg3, The cytometry plate will be ready at approximately {cytometryReadyTime}.)
UserPrompt(Dispose of Stocks, {msg1}{msg2}\n\n{msg3})

//--- Plate 2 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)
Set(sequenceNum, 0)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_12_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_2.lmsf, reader = {reader1}, readEndTime = {readEndTime1})



//--- Plate 3 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_12_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_3.lmsf, reader = {reader1}, readEndTime = {readEndTime1})



//--- Cytometry Plate (already on the STAR deck) ---------------------------------------------------------------------------------

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_12_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Cytom_plate.lmsf, reader = {reader1}, readEndTime = {readEndTime1})



//--- Clean up --------------------------------------------------------------------------------------

Overlord({ovpCommDirectory}\Sealer Heater Off.ovp)
WaitFor(Overlord)

SaveXML()

CopyRemoteFiles()
