
Set(sub_project, notAssigned)
Set(queueDirectory, notAssigned)
Set(inducer, notAssigned)
Set(media, notAssigned)
Set(percentDMSO, 0)

//Set readers to be used
Set(reader1, Neo)
Set(reader2, Neo2)

#InsertVariables

//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//No DNA extraction for this version of the script
Set(keepOldGrowthPlate, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(Common protocol scripts\Set Common Directories.lmsf)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specific to this experiment
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Cytometry for 6 variants)
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, GSF-IMS Project\E. coli\Cytometry for 12 variants)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(initHHCMethod, Turn on pre-heat HHC.hsl)
Set(startMethod, Uniform non-selective plate prep plus bacteria.1 strain.12 plasmids.hsl)
Set(nonSelectiveGradientMethod, Inducer gradient plate prep_2 gradients per row.hsl)
Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
//New version of Plate pre-heating method takes 11 minutes to run - leaves HHC on all the time
Set(preHeatPlateTime, 660)
Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(cytometryPrepMethod, Prep cytometry plate.2 gradients per row.hsl)
Set(cytometryTransferMethod, Transfer cells from old GP to Cytometry Plate_2 gradients per row.hsl)
//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)
Set(dilutionSeriesFactor, 4)

/////////////////////////////////////////
//Set any other short-hand dictionary keys that will be used repeatedly
Set(getNewGrowthPlate, {ovpCommDirectory}\Labware\Move Tips and New Growth Plate to STAR.ovp)
Set(clearTipRackOvp, {ovpCommDirectory}\Labware\Move Tips from STAR to Waste.ovp)
/////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section

StartPrompt(E. Coli Fitness Selection, {scriptDir}\Cytometry.24 half-rows.24 plasmids.1 inducer-list.txt)

UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)
UserPrompt(Check STAR Hamilton Tips, Make sure there are at least 136 1000 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 1000.PNG)
UserPrompt(Check STAR Hamilton Tips, Make sure there are at least 168 300 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 300.PNG)

Set(msg2, Make sure there are at least five racks of 300 uL tips in the PAA Carousel (hotel no. 2).\n)
UserPrompt(Tips, {msg2}, {lmsfImageDirectory}\Tip Hotel 2.png)
Set(tips300Index, 5)
Set(tips1000Index, 0)
Set(tips50Index, 0)

Set(msg2, Load 6 growth plates with lids into stack no. 7 of the PAA Carousel.\n)
UserPrompt(Load Growth Plates, {msg2}, {lmsfImageDirectory}\growth plate stack.PNG)

NewXML(growth plate prep)

If({sub_project}==notAssigned, Get(sub-project, sub_project, Select the sub-project (determines Gen5 protocols):))

GetExpID({startDate}_{sub_project}-Cytom-24-plasmids)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\set_gen5_protocols_by_sub-project.lmsf, sub_project_in = {sub_project})

Overlord({ovpCommDirectory}\Initialize Robot Carousel Sealer and Pealer.ovp)

Get(user, user)

//Get media info from user if needed (i.e., if not assigned at #InsertVariables)
If({media} != notAssigned, Set(msg1, The media for this experiment should be {media}))
If({percentDMSO} != 0, Set(msg2, with {percentDMSO}% DMSO))
If({percentDMSO} == 0, Set(msg2, ))
If({media} != notAssigned, UserPrompt(Media, {msg1} {msg2}.))
If({media} == notAssigned, Get(media, media))

If({queueDirectory}==notAssigned, Set(queueDirectory, {scriptDir}))

Set(msg1, Open the file strain_plasmids_24.txt from today's folder in the LMSF Queue:\n\t{queueDirectory}.\nThen, verify that it contains the appropriate information for this experiment.)
Set(msg2, One strain and 24 plasmids for the experiment.)

Set(msg5, \n\nThe LMSF Queue is on the JCloud at: \\resdata-smb\JCloud2\Shared_Data\LMSF Queue.)
Set(msg6, \nIt should be pinned to the Quick Access in the Windows file browser.)

If({queueDirectory}=={scriptDir}, Set(msg1, Open the file strain_plasmids_24.txt and edit it to contain the appropriate information for this experiment.))
If({queueDirectory}=={scriptDir}, Set(msg5, \nThe file should be in the folder: {scriptDir}.))
If({queueDirectory}=={scriptDir}, Set(msg6, ))

UserPrompt(Strain and Plasmids, {msg1}\n{msg2}{msg5}{msg6})

ImportDictionary({queueDirectory}\strain_plasmids_24.txt)

AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid2})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid3})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid4})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid5})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid6})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid7})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid8})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid9})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid10})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid11})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid12})

AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid13})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid14})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid15})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid16})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid17})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid18})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid19})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid20})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid21})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid22})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid23})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmid24})


//Get inducer info from user if needed (i.e., if not assigned at #InsertVariables)
Set(needsInducerInput, false)
If({inducer} ==  notAssigned, Set(needsInducerInput, true))

If({needsInducerInput} ==  true, Get(additive, inducer, Select the inducer used for the experiment:))
If({needsInducerInput} ==  true, Get(concentration, inducerStock, Enter the concentration of the {inducer} starting stock:))

If({needsInducerInput} !=  true, Set(inducerStock, {inducerStockConc} {inducerStockUnits}))
Set(msg1, temp)
Set(msg2, temp)
If({needsInducerInput} !=  true, Set(msg1, {inducer} stock concentration should be {inducerStock}.))
If({needsInducerInput} !=  true, Set(msg2, 20 mL of {inducer} stock is needed for this experiment.))
If({needsInducerInput} !=  true, UserPrompt({inducer} Stock, {msg1}\n{msg2}))

If({needsInducerInput} !=  true,AddXML(additives, additive))
If({needsInducerInput} !=  true,AddXML(additive, useKey, inducer))
If({needsInducerInput} !=  true,AddXML(additive, additiveId, {inducer}))
If({needsInducerInput} !=  true,AddXML(additive, concentration, {inducerStock}))

Set(inducer1, {inducer})
Set(inducer2, {inducer})

Set(inducer1StockConc, {inducerStockConc})
Set(inducer2StockConc, {inducerStockConc})
Set(inducer1StockUnits, {inducerStockUnits})
Set(inducer2StockUnits, {inducerStockUnits})
Set(inducer1Stock, {inducer1StockConc} {inducer1StockUnits})
Set(inducer2Stock, {inducer2StockConc} {inducer2StockUnits})

Get(note, note)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)
Set(msg2, \tMedia: \t\t\t{media}\n\n)
Set(msg3, \tBacteria strain: \t\t{strain1}\n)
Set(msg4, \t\tPlasmid 1: \t{plasmid1}\n)

Set(msg4, {msg4}\t\tPlasmid 2: \t{plasmid2}\n)
Set(msg4, {msg4}\t\tPlasmid 3: \t{plasmid3}\n)
Set(msg4, {msg4}\t\tPlasmid 4: \t{plasmid4}\n)
Set(msg4, {msg4}\t\tPlasmid 5: \t{plasmid5}\n)
Set(msg4, {msg4}\t\tPlasmid 6: \t{plasmid6}\n)
Set(msg4, {msg4}\t\tPlasmid 7: \t{plasmid7}\n)
Set(msg4, {msg4}\t\tPlasmid 8: \t{plasmid8}\n)
Set(msg4, {msg4}\t\tPlasmid 9: \t{plasmid9}\n)
Set(msg4, {msg4}\t\tPlasmid 10: \t{plasmid10}\n)
Set(msg4, {msg4}\t\tPlasmid 11: \t{plasmid11}\n)
Set(msg4, {msg4}\t\tPlasmid 12: \t{plasmid12}\n)
Set(msg4, {msg4}\t\tPlasmid 13: \t{plasmid13}\n)
Set(msg4, {msg4}\t\tPlasmid 14: \t{plasmid14}\n)
Set(msg4, {msg4}\t\tPlasmid 15: \t{plasmid15}\n)
Set(msg4, {msg4}\t\tPlasmid 16: \t{plasmid16}\n)
Set(msg4, {msg4}\t\tPlasmid 17: \t{plasmid17}\n)
Set(msg4, {msg4}\t\tPlasmid 18: \t{plasmid18}\n)
Set(msg4, {msg4}\t\tPlasmid 19: \t{plasmid19}\n)
Set(msg4, {msg4}\t\tPlasmid 20: \t{plasmid20}\n)
Set(msg4, {msg4}\t\tPlasmid 21: \t{plasmid21}\n)
Set(msg4, {msg4}\t\tPlasmid 22: \t{plasmid22}\n)
Set(msg4, {msg4}\t\tPlasmid 23: \t{plasmid23}\n)
Set(msg4, {msg4}\t\tPlasmid 24: \t{plasmid24}\n)


Set(msg16, \tInducer: \t\t\t{inducer}, stock concentration: {inducerStock}\n\n)
Set(msg17, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
Set(msg18, \n\n\{overNightProtocol1}\n{overNightProtocol2}\n{repeatProtocol})
UserPrompt(Review Experiment Details: {experimentId}, {msg1}{msg2}{msg3}{msg4}\n{msg16}{msg17}{msg18})

Set(msg1, Set up the STAR deck layout as shown.)
UserPrompt(STAR Deck Layout, {msg1}, {scriptDir}\STAR Deck Layout.12 rows.12 plasmids.1 inducer.PNG, 1000)

Set(msg1, Load the first set of 12 bacteria stocks in tube positions 10-21:)
Set(msg2, \n\tPosition 10: {plasmid1})
Set(msg2, {msg2}\n\tPosition 11: {plasmid2})
Set(msg2, {msg2}\n\tPosition 12: {plasmid3})
Set(msg2, {msg2}\n\tPosition 13: {plasmid4})
Set(msg2, {msg2}\n\tPosition 14: {plasmid5})
Set(msg2, {msg2}\n\tPosition 15: {plasmid6})
Set(msg2, {msg2}\n\tPosition 16: {plasmid7})
Set(msg2, {msg2}\n\tPosition 17: {plasmid8})
Set(msg2, {msg2}\n\tPosition 18: {plasmid9})
Set(msg2, {msg2}\n\tPosition 19: {plasmid10})
Set(msg2, {msg2}\n\tPosition 20: {plasmid11})
Set(msg2, {msg2}\n\tPosition 21: {plasmid12})
Set(msg3, \n\nThen click 'OK' to continue.)
UserPrompt(STAR Deck Layout, {msg1}{msg2}{msg3}, {scriptDir}\STAR Deck Layout.bacteria.1-12.PNG, 800)

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.no Abgene.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR successfully moved the lids click 'OK' to start the experiment.)
// end lid movement test


WaitFor(Overlord)
//End User input and Overlord initialization section
//////////////////////////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////////////////////////
//Run the protocol
////////////////////////////////////////////////////////////////////////////////////

//--- 0 ------------------------------------------------------------------------------

//Test readers while 1st plate is pipetting
Gen5({reader1}, CarrierOut)
Gen5({reader2}, CarrierOut)
WaitFor({reader1}, false)
WaitFor({reader2}, false)
Set(msg, Plate readers {reader1} and {reader2} should have their carriers out. \nVerify that the carriers are out and empty, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
Gen5({reader1}, RunExp, {initProtocol}, pre-run-test-1, {dataDirectory})
Gen5({reader2}, RunExp, {initProtocol}, pre-run-test-2, {dataDirectory})

Set(msg, Switch to STAR computer to edit tip counters, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Edit Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Set(preHeatTemperature, 67)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{initHHCMethod})
WaitFor(S-Cell-STAR)
Set(msg, Verify that HHC no. 1 is now set to pre-heat temperature, then Click 'OK' to continue.)
UserPrompt(Check Pre-Heat HHC, {msg})

//--- Plate 1 ------------------------------------------------------------------------------
Set(plateNum, 1)
Set(platesInStack, 6)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_1.lmsf, reader = {reader1})

Math(lineage2startTime, {readStartTime} + 300)

Set(msg1, Load the second set of 12 bacteria stocks in tube positions 10-21:)
Set(msg2, \n\tPosition 10: {plasmid13})
Set(msg2, {msg2}\n\tPosition 11: {plasmid14})
Set(msg2, {msg2}\n\tPosition 12: {plasmid15})
Set(msg2, {msg2}\n\tPosition 13: {plasmid16})
Set(msg2, {msg2}\n\tPosition 14: {plasmid17})
Set(msg2, {msg2}\n\tPosition 15: {plasmid18})
Set(msg2, {msg2}\n\tPosition 16: {plasmid19})
Set(msg2, {msg2}\n\tPosition 17: {plasmid20})
Set(msg2, {msg2}\n\tPosition 18: {plasmid21})
Set(msg2, {msg2}\n\tPosition 19: {plasmid22})
Set(msg2, {msg2}\n\tPosition 20: {plasmid23})
Set(msg2, {msg2}\n\tPosition 21: {plasmid24})
Set(msg3, \n\nThen click 'OK' to continue.)
UserPrompt(STAR Deck Layout, {msg1}{msg2}{msg3}, {scriptDir}\STAR Deck Layout.bacteria.2-12.PNG, 800)

Timer({lineage2startTime})
WaitFor(Timer)


ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 2)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_1.lmsf, reader = {reader2})

Set(cytometryReadyTime, {readEndTime1})
Math(cytometryReadyTime, {cytometryReadyTime} + {repeatProtocolTime})
Math(cytometryReadyTime, {cytometryReadyTime} + {repeatProtocolTime})
Math(cytometryReadyTime, {cytometryReadyTime} + 1200)
Set(msg1, Top off the media reservoir on the STAR and then dispose of the bacteria stocks.\n)
Set(msg2, Then click 'OK' to continue the experiment.)
Set(msg3, The first cytometry plate will be ready at approximately {cytometryReadyTime}.)
UserPrompt(Top off Media and Dispose of Stocks, {msg1}{msg2}\n\n{msg3})

//--- Plate 2 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)
Set(sequenceNum, 0)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_2.lmsf, reader = {reader1}, readEndTime = {readEndTime1})

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 2)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_2.lmsf, reader = {reader2}, readEndTime = {readEndTime2})



//--- Plate 3 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_3.lmsf, reader = {reader1}, readEndTime = {readEndTime1})

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 2)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_3.lmsf, reader = {reader2}, readEndTime = {readEndTime2})



//--- Cytometry Plate (already on the STAR deck) ---------------------------------------------------------------------------------

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 1)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Cytom_plate.lmsf, reader = {reader1}, readEndTime = {readEndTime1})

ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates_24_half_rows_24_plasmids.lmsf, lineage = 2)
ReadScript(GSF-IMS Project\E. coli\Cytometry for 12 variants\Cytom_plate.lmsf, reader = {reader2}, readEndTime = {readEndTime2})



//--- Clean up --------------------------------------------------------------------------------------

Overlord({ovpCommDirectory}\Sealer Heater Off.ovp)
WaitFor(Overlord)

SaveXML()

CopyRemoteFiles()
