//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//No DNA extraction for this version of the script
Set(keepOldGrowthPlate, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specifc to this experiment
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Cytometry for 6 variants)
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(initHHCMethod, Turn on pre-heat HHC.hsl)
Set(startMethod, Uniform non-selective plate prep plus bacteria.1 strain.6 plasmids.hsl)
Set(nonSelectiveGradientMethod, Inducer gradient plate prep_high gradient.hsl)
// This indicates that the highest concentration in the growth plate is the stock concentration (not diluted 2x).
Set(gradStartFullConc, True)
Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
//New version of Plate pre-heating method takes 11 minutes to run - leaves HHC on all the time
Set(preHeatPlateTime, 660)
Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(cytometryPrepMethod, Prep cytometry plate.hsl)
Set(cytometryTransferMethod, Transfer cells from old GP to Cytometry Plate_high gradient.hsl)
//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)


/////////////////////////////////////////////////////////////////
//Gen5 protocols to be run and associated timers:
Set(overNightProtocol1, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 12h.37C.1C.Ex500Em530.prt)
//overNightProtocolTime1 = nominal run time + 300
Set(overNightProtocolTime1, 43500)

// *** For LacI project ****************************
Set(repeatProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 2h.35m.37C.1C.Ex500Em530.prt)
//repeatProtocolTime = nominal run time + 300
Set(repeatProtocolTime, 9600)

// *** For ramR project ****************************
Set(repeatProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 3h.37C.1C.Ex500Em530.prt)
//repeatProtocolTime = nominal run time + 300
Set(repeatProtocolTime, 11100)

//Gen5 protocol for testing readers at beginning of run to give consistent starting state
Set(initProtocol, {gen5ProtDir}\Growth Plate w Membrane short test.prt)
/////////////////////////////////////////////////////////////////

//Set readers to be used
Set(reader1, Neo)

/////////////////////////////////////
//This section sets shorter Gen5 protocols for testing, set isTesting to false for actual experiment
Set(isTesting, false)
GetUserYesNo(isTesting, Testing?, Is this a test run (short Gen5 protocols)?)
If({isTesting}!=Yes, UserPrompt(Re-Boot STAR, Turn off the power to the Hamilton STAR; wait 10 seconds and turn it back on; then click 'OK' to continue., {lmsfImageDirectory}\dialog-warning.png))

Set(testProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 30m.37C.1C.Ex500Em530.prt)

If({isTesting}==Yes, Set(overNightProtocol1, {testProtocol}))
//overNightProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(overNightProtocolTime1, 2100))

//If({isTesting}==Yes, Set(repeatProtocol, {testProtocol}))
//repeatProtocolTime = nominal run time + 300
//If({isTesting}==Yes, Set(repeatProtocolTime, 600))
/////////////////////////////////////////

/////////////////////////////////////////
//Set any other short-hand dictionary keys that will be used repeatedly
Set(getNewGrowthPlate, {ovpCommDirectory}\Labware\Move Tips and New Growth Plate to STAR.ovp)
Set(clearTipRackOvp, {ovpCommDirectory}\Labware\Move Tips from STAR to Waste.ovp)
/////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section

// List of labware and other requirements is the same as previous experiment
StartPrompt(E. Coli Fitness Selection, {scriptDir}\Cytometry.1 strain.12 plasmids_high gradient-list.txt)

UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)
UserPrompt(Check STAR Hamilton Tips, Make sure there are two full racks of 1000 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 1000.PNG)
UserPrompt(Check STAR Hamilton Tips, Make sure there are two full racks of 300 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 300.PNG)

Set(msg2, Make sure there are at least four racks of 300 uL tips in the PAA Carousel (hotel no. 2).\n)
UserPrompt(Tips, {msg2}, {lmsfImageDirectory}\Tip Hotel 2.png)
Set(tips300Index, 4)
Set(tips1000Index, 0)
Set(tips50Index, 0)

Set(msg2, Load three growth plates with lids into stack no. 7 of the PAA Carousel.\n)
UserPrompt(Load Growth Plates, {msg2}, {lmsfImageDirectory}\growth plate stack.PNG)

NewXML(growth plate prep)

Overlord({ovpCommDirectory}\Initialize Robot Carousel Sealer and Pealer.ovp)

Get(user, user)

Get(media, media)

Set(msg1, Open the file strain_plasmids_6.txt and edit it to contain the appropriate information for this experiment.)
Set(msg2, One strain and 6 plasmids/variants/replicates:)
Set(msg3, plasmidB1 through plasmidG1 are the 6 variants/replicates for the first growth plate. They will be induced with ligand no. 1 in rows B, C, and D; and with ligand no. 2 in rows E, F, and G.)
UserPrompt(Strain and Plasmids, {msg1}\n{msg2}\n\n\t{msg3})

ImportDictionary({scriptDir}\strain_plasmids_6.txt)

AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidB1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidC1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidD1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidE1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidF1})
AddXML(strains, strain)
AddXML(strain, strainId, {strain1})
AddXML(strain, plasmidId, {plasmidG1})

// These must be set to avoid errors later in the script
Set(plasmidB2, {plasmidB1})
Set(plasmidC2, {plasmidC1})
Set(plasmidD2, {plasmidD1})
Set(plasmidE2, {plasmidE1})
Set(plasmidF2, {plasmidF1})
Set(plasmidG2, {plasmidG1})

Set(overNightProtocol2, {overNightProtocol1})
Set(overNightProtocolTime2 , 0)

Set(msg, The ligand stocks should be at 2x the maximum concentration that will be measured.)
If({gradStartFullConc}==True, Set(msg, The ligand stocks should be EQUAL TO the maximum concentration that will be measured.))

UserPrompt(Ligand stocks, {msg})
Get(additive, inducer1, Select the first ligand, which will be used with {plasmidB1}, {plasmidC1}, and {plasmidD1}:)
Get(concentration, inducer1Stock, Enter the concentration of the {inducer1} starting stock:)
Get(additive, inducer2, Select the second ligand, which will be used with {plasmidE1}, {plasmidF1}, and {plasmidG1}:)
Get(concentration, inducer2Stock, Enter the concentration of the {inducer2} starting stock:)

// These need to be set to avoid error in Hamilton methods
Set(inducer3, none)
Set(inducer3StockUnits, none)
Set(inducer3StockConc, 0)
Set(inducer4, none)
Set(inducer4StockUnits, none)
Set(inducer4StockConc, 0)

Get(note, note)

GetExpID({startDate}_6-plasmids_2-ligands_Cytom)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)
Set(msg2, \tMedia: \t\t\t{media}\n\n)
Set(msg3, \tBacteria strain: \t\t{strain1}\n\n)
Set(msg4, \t\tPlasmidB1: \t{plasmidB1}: \t{inducer1}\n)
Set(msg5, \t\tPlasmidC1: \t{plasmidC1}: \t{inducer1}\n)
Set(msg6, \t\tPlasmidD1: \t{plasmidD1}: \t{inducer1}\n\n)
Set(msg7, \t\tPlasmidE1: \t{plasmidE1}: \t{inducer2}\n)
Set(msg8, \t\tPlasmidF1: \t{plasmidF1}: \t{inducer2}\n)
Set(msg9, \t\tPlasmidG1: \t{plasmidG1}: \t{inducer2}\n\n)

Set(msg16a, \tInducer 1: \t{inducer1}, stock concentration: {inducer1Stock}\n)
Set(msg16b, \tInducer 2: \t{inducer2}, stock concentration: {inducer2Stock}\n\n)

Set(msg17, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
Set(msg18, \n\n\{overNightProtocol1}\n{repeatProtocol})
UserPrompt(Review Experiment Details: {experimentId}, {msg1}{msg2}{msg3}{msg4}{msg5}{msg6}{msg7}{msg8}{msg9}{msg16a}{msg16b}{msg17}{msg18})

Set(msg1, Set up the STAR deck layout as shown and load the first six bacteria stocks:)
Set(msg2, {plasmidB1} in position 10, {plasmidC1} in position 11,...)
UserPrompt(STAR Deck Layout, {msg1}\n\t{msg2}, {scriptDir}\STAR Deck Layout.4 inducers.PNG, 1000)

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.no Abgene.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR successfully moved the lids click 'OK' to start the experiment.)
// end lid movement test


WaitFor(Overlord)
//End User input and Overlord initialization section
//////////////////////////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////////////////////////
//Run the protocol
////////////////////////////////////////////////////////////////////////////////////

//--- 0 ------------------------------------------------------------------------------

//Test readers while 1st plate is pipetting
Gen5({reader1}, CarrierOut)
WaitFor({reader1}, false)
Set(msg, Plate reader {reader1} should have its carrier out. \nVerify that the carrier is out and empty, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
Gen5({reader1}, RunExp, {initProtocol}, pre-run-test-1, {dataDirectory})

Set(msg, Switch to STAR computer to edit tip counters, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Edit Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Set(preHeatTemperature, 67)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{initHHCMethod})
WaitFor(S-Cell-STAR)
Set(msg, Verify that HHC no. 1 is now set to pre-heat temperature, then Click 'OK' to continue.)
UserPrompt(Check Pre-Heat HHC, {msg})

//--- Plate 1 ------------------------------------------------------------------------------
Set(plateNum, 1)
Set(platesInStack, 3)
Set(twelveStrainsFourLigands, True)

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates.lmsf, lineage = 1)
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_1.lmsf, reader = {reader1})

//--- Plate 2 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)
Set(sequenceNum, 0)

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates.lmsf, lineage = 1)
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_2.lmsf, reader = {reader1}, readEndTime = {readEndTime1})


//--- Plate 3 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates.lmsf, lineage = 1)
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Plate_3.lmsf, reader = {reader1}, readEndTime = {readEndTime1})

//--- Cytometry Plate (already on the STAR deck) ---------------------------------------------------------------------------------

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Set_params_for_plates.lmsf, lineage = 1)
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Cytometry for 12 variants\Cytom_plate.lmsf, reader = {reader1}, readEndTime = {readEndTime1})

//--- Clean up --------------------------------------------------------------------------------------

Overlord({ovpCommDirectory}\Sealer Heater Off.ovp)
WaitFor(Overlord)

SaveXML()

CopyRemoteFiles()
