//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specifc to this experiment
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Fitness Selection 1)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
//Set(startMethod, Uniform non-selective plate prep plus starting bacteria.hsl)
Set(startMethod, Uniform non-selective plate prep plus starting bacteria.2 clones.hsl)
Set(nonSelectiveGradientMethod, Inducer gradient plate prep.hsl)
Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(selectiveGradientMethod, Inducer gradient plus selector plate prep.hsl)
//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)
//////////////////////////////////////////////////////////////////


/////////////////////////////////////////////////////////////////
//Gen5 protcols to be run and associated timers:
Set(overNightProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 16h.37C.1C.prt)
//overNightProtocolTime = nominal run time + 300
Set(overNightProtocolTime, 57900)
Set(repeatProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 3h20m.37C.1C.prt)
//repeatProtocolTime = nominal run time + 300
Set(repeatProtocolTime, 12300)
Set(lastProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 16h.37C.1C.prt)
//lastProtocolTime = nominal run time + 300
Set(lastProtocolTime, 57900)

//Gen5 protocol for testing readers at beginning of run to give consistent starting state
Set(initProtocol, {gen5ProtDir}\Growth Plate w Membrane short test.prt)
/////////////////////////////////////////////////////////////////

//Set readers to be used
Set(mainReader, Neo)

/////////////////////////////////////
//This section sets shorter Gen5 protocols for testing, set isTesting to false for actual experiment
Set(isTesting, false)
GetUserYesNo(isTesting, Testing?, Is this a test run (short Gen5 protocols)?)

Set(testProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 1h.37C.1C.prt)
If({isTesting}==Yes, Set(overNightProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 1.5h.37C.1C.prt))
//overNightProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(overNightProtocolTime, 5700))
If({isTesting}==Yes, Set(repeatProtocol, {testProtocol}))
//repeatProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(repeatProtocolTime, 900))
If({isTesting}==Yes, Set(lastProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 1h.37C.1C.prt))
//lastProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(lastProtocolTime, 3900))
/////////////////////////////////////////

/////////////////////////////////////////
//Set any other short-hand dictionary keys that will be used repeatedly
Set(getNewGrowthPlate, {ovpCommDirectory}\Labware\Move Tips and New Growth Plate to STAR.ovp)
/////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section

StartPrompt(E. Coli Fitness Selection, {scriptDir}\Fitness Selection 1.5 plates-list.txt)

UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)
UserPrompt(Check STAR Hamilton Tips, Make sure thare at least 96 1000 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 1000.PNG)
UserPrompt(Check STAR Hamilton Tips, Make sure thare at least 72 300 uL tips in the tip supports on the deck of the STAR., {lmsfImageDirectory}\Tip supports 300.PNG)

Set(msg2, Make sure there are at least four racks of 300 uL tips in the PAA Carousel (hotel no. 2).\n)
UserPrompt(Tips, {msg2}, {lmsfImageDirectory}\Tip Hotel 2.png)
Set(tips300Index, 4)

NewXML(growth plate prep)

Overlord({ovpCommDirectory}\Initialize Robot Carousel Sealer and Pealer.ovp)

Get(user, user)

Get(media, media)

Get(strain, strain1, Select the bacteria strain used for the experiment:)
Get(plasmid, plasmid1, Select the plasmid used for the experiment:)

Get(additive, inducer, Select the inducer used for the experiment:)
Get(concentration, inducerStock, Enter the concentration of the {inducer} starting stock:)

Get(additive, selector, Select the selector used for the experiment:)
Get(concentration, selectorStock, Enter the concentration of the {selector} starting stock:)

Get(note, note)

GetExpID({startDate}_{inducer}_{selector}_Selection-5-plates)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)
Set(msg2, \tMedia: \t\t\t{media}\n\n \tBacteria: \t\t\t{strain1}, with {plasmid1}\n\n)
Set(msg3, \tInducer: \t\t\t{inducer}, stock concentration: {inducerStock}\n)
Set(msg4, \tSelector:  \t\t\t{selector}, stock concentration: {selectorStock}\n  \n)
Set(msg5, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
UserPrompt(Review Experiment Details: {experimentId}, {msg1} {msg2} {msg3} {msg4} {msg5})

Set(msg1, Set up the STAR deck layout as shown.)
UserPrompt(STAR Deck Layout, {msg1}, {scriptDir}\STAR Deck Layout.PNG, 1000)

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.No DNA extraction.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR sucessfully moved the lids click 'OK' to start the experiment.)
// end lid movement test


WaitFor(Overlord)
//End User input and Overlord initialization section
//////////////////////////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////////////////////////
//Run the protocol
////////////////////////////////////////////////////////////////////////////////////

//--- 0 ------------------------------------------------------------------------------

//Test readers while 1st plate is pipetting
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)
Set(msg, Plate reader {mainReader} should have its carrier out. \nVerify that the carrier is out and empty, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
Gen5({mainReader}, RunExp, {initProtocol}, pre-run-test, {dataDirectory})

//--- 1 ------------------------------------------------------------------------------
Set(plateNum, 1)
Set(platesInStack, 5)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack})
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{startMethod})
Timer(600)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader}, false)
WaitFor({reader2b}, false)
WaitFor({reader3b}, false)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {overNightProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
//WaitFor({mainReader})

Timer({overnightWait})
WaitFor(Timer)

//--- 2 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack} [STAR.Plate.Handling.Labware.Name] "Tips300" [STAR.Tip.300.Index] {tips300Index})
Math(tips300Index, {tips300Index} - 1)
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

//Seal and peel throw-away plate to make sure peeler works
//Overlord(C:\Program Files (x86)\PAA\Overlord3\Procedures\Common\Seal and Peel plate from Rack 6 shelf 1.ovp, [Sealer.ManualSeal] "No")

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(dilutionFactor, 50)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{nonSelectivePlateMethod})
WaitFor(S-Cell-STAR)

//WaitFor(Overlord) step here so that Seal and Peel runs concurrently with Hamilton pipetting
WaitFor(Overlord)

WaitFor({mainReader})
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, CarrierIn)
WaitFor({mainReader}, false)

Set(keepOldPlate, false)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{firstCopyPlateMethod})
WaitFor(S-Cell-STAR)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {repeatProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
//WaitFor({mainReader})

Timer({repeatWait})
WaitFor(Timer)

//--- 3 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack} [STAR.Plate.Handling.Labware.Name] "Tips300" [STAR.Tip.300.Index] {tips300Index} [STAR.Tip.ClearWaste] "true")
Math(tips300Index, {tips300Index} - 1)
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(gradPlateNum, 1)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{doubleGradMethod})
Timer(2100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader})
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, CarrierIn)
WaitFor({mainReader}, false)

Set(keepOldPlate, true)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{copyPlateMethod})
WaitFor(S-Cell-STAR)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {repeatProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
//WaitFor({mainReader})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Move old growth plate to handoff.hsl)
WaitFor(S-Cell-STAR)

Gen5({reader2b}, CarrierOut)
WaitFor({reader2b}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{reader2b}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Math(oldPlateNum, {plateNum} - 1)
Gen5({reader2b}, RunExp, {bPlateProtocol}, {experimentId}_growth-plate_{oldPlateNum}b, {dataDirectory})
//WaitFor({reader2b})

Timer({repeatWait})
WaitFor(Timer)

//--- 4 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack} [STAR.Plate.Handling.Labware.Name] "Tips300" [STAR.Tip.300.Index] {tips300Index} [STAR.Tip.ClearWaste] "true")
Math(tips300Index, {tips300Index} - 1)
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(gradPlateNum, 2)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{doubleGradMethod})
Timer(2100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader})
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, CarrierIn)
WaitFor({mainReader}, false)

Set(keepOldPlate, true)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{copyPlateMethod})
WaitFor(S-Cell-STAR)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {repeatProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
//WaitFor({mainReader})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Move old growth plate to handoff.hsl)
WaitFor(S-Cell-STAR)

Gen5({reader3b}, CarrierOut)
WaitFor({reader3b}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{reader3b}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Math(oldPlateNum, {plateNum} - 1)
Gen5({reader3b}, RunExp, {bPlateProtocol}, {experimentId}_growth-plate_{oldPlateNum}b, {dataDirectory})
//WaitFor({reader3b})

Timer({repeatWait})
WaitFor(Timer)

//--- 5 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack} [STAR.Plate.Handling.Labware.Name] "Tips300" [STAR.Tip.300.Index] {tips300Index} [STAR.Tip.ClearWaste] "true")
Math(tips300Index, {tips300Index} - 1)
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(gradPlateNum, 3)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{doubleGradMethod})
Timer(2100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader})
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, CarrierIn)
WaitFor({mainReader}, false)

Set(keepOldPlate, true)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{copyPlateMethod})
WaitFor(S-Cell-STAR)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {lastProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
//WaitFor({mainReader})

Timer({lastWait})
WaitFor(Timer)
//---6--------------------------------------------------------------------------------------

WaitFor({mainReader})
WaitFor({reader2b})
WaitFor({reader3b})

SaveXML()

CopyRemoteFiles()

Overlord({ovpCommDirectory}\Sealer Heater Off.ovp)
WaitFor(Overlord)
