
//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

Set(isTesting, false)

Set(sub_project, Align-TF)
Set(inducer1, IPTG)
Set(inducer2, 1S-TIQ)
Set(selector1, TMP)
Set(selector2, TMP)

Set(inducer1StockConc, 4000)
Set(inducer2StockConc, 500)
Set(selector1StockConc, 10)
Set(selector2StockConc, 60)

Set(inducer1StockUnits, umol/L)
Set(inducer2StockUnits, umol/L)
Set(selector1StockUnits, ug/mL)
Set(selector2StockUnits, ug/mL)

Set(media, M9-gly-kan)
Set(percentDMSO, 0.5)

// fold-dilution across dilution series in nonSelectiveGradientMethod and selectiveGradientMethod:
Set(dilutionSeriesFactor, 3)

Set(strain1, MG1655-dLac)
Set(plasmid1, notAssigned)
Set(plasmid2, notAssigned)
Set(plasmid3, notAssigned)
Set(plasmid4, notAssigned)

#InsertVariables

Set(inducer1Stock, {inducer1StockConc} {inducer1StockUnits})
Set(inducer2Stock, {inducer2StockConc} {inducer2StockUnits})
Set(selector1Stock, {selector1StockConc} {selector1StockUnits})
Set(selector2Stock, {selector2StockConc} {selector2StockUnits})


/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(Common protocol scripts\Set Common Directories.lmsf)
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Fitness Selection 2.With DNA Extraction)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specific to this experiment
// Overlord protocols are the same as for the last version
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, GSF-IMS Project\E. coli\Fitness Selection 2)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(initHHCMethod, Turn on pre-heat HHC.hsl)
Set(startMethod, Uniform non-selective plate prep plus 4 strains.hsl)
Set(startMethodTime, 1600)
Set(nonSelectiveGradientMethod, Align-TF gradient plate prep.hsl)
Set(nonSelectivePlateTime, 1140)

Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
//New version of Plate pre-heating method takes 11 minutes to run - leaves HHC on all the time
Set(preHeatPlateTime, 660)
// Subtract 2 minutes (i.e., start preheat 2 minutes later) for single read 
Math(preHeatPlateTime, {preHeatPlateTime} - 120)

Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(selectiveGradientMethod, Align-TF gradient plate prep.hsl)
Set(selectivePlateTime, 1140)

//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)

/////////////////////////////////////////////////////////////////


//Set readers to be used
Set(mainReader, Neo)

//--- Scipt for initial steps that don't change ----------------------------------------------------------------------------- 
Set(isExtractingDNA, false)
Set(isGBA_1_exp, true)
Set(startWithInducer, No)
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.init experiment.Align-TF.lmsf)

//Get strain info from user if needed (i.e., if not assigned at #InsertVariables)
Set(needsStrainInput, false)
If({plasmid1} ==  notAssigned, Set(needsStrainInput, true))
If({needsStrainInput} !=  true, AddXML(strains, strain))
If({needsStrainInput} !=  true, AddXML(strain, strainId, {strain1}))
If({needsStrainInput} !=  true, AddXML(strain, plasmidId, {plasmid1}))

If({needsStrainInput} !=  true, AddXML(strains, strain))
If({needsStrainInput} !=  true, AddXML(strain, strainId, {strain1}))
If({needsStrainInput} !=  true, AddXML(strain, plasmidId, {plasmid2}))

If({needsStrainInput} !=  true, AddXML(strains, strain))
If({needsStrainInput} !=  true, AddXML(strain, strainId, {strain1}))
If({needsStrainInput} !=  true, AddXML(strain, plasmidId, {plasmid3}))

If({needsStrainInput} !=  true, AddXML(strains, strain))
If({needsStrainInput} !=  true, AddXML(strain, strainId, {strain1}))
If({needsStrainInput} !=  true, AddXML(strain, plasmidId, {plasmid4}))

Set(msg, Select the bacteria strain used for the experiment:)
If({needsStrainInput} ==  true, Get(strain, strain1, {msg}))

If({needsStrainInput} ==  true, Get(plasmid, plasmid1, Select the plasmid used for rows A and B: tube position 10))
If({needsStrainInput} ==  true, Get(plasmid, plasmid2, Select the plasmid used for rows C and D: tube position 11))
If({needsStrainInput} ==  true, Get(plasmid, plasmid3, Select the plasmid used for rows E and F: tube position 12))
If({needsStrainInput} ==  true, Get(plasmid, plasmid4, Select the plasmid used for rows G and H: tube position 13))

// For this type of experiment, the user is never asked for the inducer or antibiotic info
AddXML(additives, additive)
AddXML(additive, useKey, antibiotic)
AddXML(additive, additiveId, {selector1})
AddXML(additive, concentration, {selector1Stock})

AddXML(additives, additive)
AddXML(additive, useKey, antibiotic)
AddXML(additive, additiveId, {selector2})
AddXML(additive, concentration, {selector2Stock})

AddXML(additives, additive)
AddXML(additive, useKey, inducer)
AddXML(additive, additiveId, {inducer1})
AddXML(additive, concentration, {inducer1Stock})

AddXML(additives, additive)
AddXML(additive, useKey, inducer)
AddXML(additive, additiveId, {inducer2})
AddXML(additive, concentration, {inducer2Stock})

Set(msg1, {inducer1} stock concentration should be {inducer1Stock}.)
Set(msg1, {msg1}\n{inducer2} stock concentration should be {inducer2Stock}.)
UserPrompt(Inducer Stocks, {msg1})

Set(first_str, The {selector1})
Set(second_str, The {selector2})
If({selector1}=={selector2}, Set(first_str, The first {selector1}))
If({selector1}=={selector2}, Set(second_str, The second {selector2}))
Set(msg1, {first_str} stock concentration should be {selector1Stock}.)
Set(msg1, {msg1}\n{second_str} stock concentration should be {selector2Stock}.)
UserPrompt(Antibiotic Stocks, {msg1})

Get(note, note)

GetExpID({startDate}_Align-TF_OD-test-5-plates)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)

Set(msg2, \tMedia: \t\t\t{media}\n\n \tBacteria: \t\t\t{strain1}\n\n \tPlasmids:\n\t\t\t{plasmid1}\n\t\t\t{plasmid2}\n\t\t\t{plasmid3}\n\t\t\t{plasmid4}\n\n)

Set(msg3a, \tInducer 1: \t\t{inducer1}, stock concentration: {inducer1Stock}\n)
Set(msg3b, \tInducer 2: \t\t{inducer2}, stock concentration: {inducer2Stock}\n)

Set(msg4, \tSelector 1:\t\t{selector1}, stock concentration: {selector1Stock}\n)
Set(msg4, {msg4}\tSelector 2:\t\t{selector2}, stock concentration: {selector2Stock}\n\n)
Set(msg5, \tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
Set(msg6, \n\n\{overNightProtocol}\n{repeatProtocol})
UserPrompt(Review Experiment Details: {experimentId}, {msg1} {msg2} {msg3a}{msg3b} {msg4} {msg5}{msg6})

Set(msg1, Set up the STAR deck layout as shown.)
Set(msg1, {msg1}\n\tInducer 1: {inducer1Stock} {inducer1})
Set(msg1, {msg1}\n\tInducer 2: {inducer2Stock} {inducer2})
Set(msg1, {msg1}\n\tSelector 1: {selector1Stock} {selector1})
Set(msg1, {msg1}\n\tSelector 2: {selector2Stock} {selector2})
UserPrompt(STAR Deck Layout, {msg1}, {scriptDir}\STAR Deck Layout.2 inducers.2 tet.4 strains.PNG, 1000)

//--- Growth Plates 1 and 2 prep and growth ----------------------------------------------------------------------------- 
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.plates 1 and 2.lmsf)

//--- Growth Plate 3 prep and OD Read from Plate 2 ----------------------------------------------------------------------------- 
// For plate 3, be sure to clear waste tip rack before adding more 300 tips
Set(clear300TipWaste, true)

ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- Growth Plate 4 prep and OD Read from Plate 3 ----------------------------------------------------------------------------- 
Set(clear300TipWaste, true)

ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- Growth Plate 5 prep and OD Read from Plate 4 ----------------------------------------------------------------------------- 
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- OD Read from Plate 5 and cleanup -------------------------------------------------------------------
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.plate 5 single OD read.lmsf)
