
//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

Set(isTesting, false)

Set(sub_project, Align-TF)
Set(inducer1, IPTG)
Set(inducer2, 1S-TIQ)
Set(inducer3, Van)
Set(inducer1StockConc, 4000)
Set(inducer2StockConc, 500)
Set(inducer3StockConc, 200)
Set(inducer1StockUnits, umol/L)
Set(inducer2StockUnits, umol/L)
Set(inducer3StockUnits, umol/L)

Set(selector1, TMP)
Set(selector2, TMP)
Set(selector3, TMP)
Set(selector1StockConc, 3)
Set(selector2StockConc, 10)
Set(selector3StockConc, 30)
Set(selector1StockUnits, ug/mL)
Set(selector2StockUnits, ug/mL)
Set(selector3StockUnits, ug/mL)

Set(media, M9-tek-gly-kan)
Set(percentDMSO, 0.5)

Set(queueDirectory, notAssigned)

#InsertVariables

Set(inducer1Stock, {inducer1StockConc} {inducer1StockUnits})
Set(inducer2Stock, {inducer2StockConc} {inducer2StockUnits})
Set(inducer3Stock, {inducer3StockConc} {inducer3StockUnits})

Set(selector1Stock, {selector1StockConc} {selector1StockUnits})
Set(selector2Stock, {selector2StockConc} {selector2StockUnits})
Set(selector3Stock, {selector3StockConc} {selector3StockUnits})


/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(Common protocol scripts\Set Common Directories.lmsf)
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Fitness Selection 2.With DNA Extraction)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specific to this experiment
// Overlord protocols are the same as for the last version
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, GSF-IMS Project\E. coli\Fitness Selection 2)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(initHHCMethod, Turn on pre-heat HHC.hsl)
Set(startMethod, Align-TF.GBA_1.plate_1.hsl)
Set(startMethodTime, 950)
Set(nonSelectiveGradientMethod, Align-TF.GBA_1.plates_2-5.hsl)
Set(nonSelectivePlateTime, 740)

Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
//New version of Plate pre-heating method takes 11 minutes to run - leaves HHC on all the time
Set(preHeatPlateTime, 660)
// Subtract 2 minutes (i.e., start preheat 2 minutes later) for single read 
Math(preHeatPlateTime, {preHeatPlateTime} - 120)

Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(selectiveGradientMethod, Align-TF.GBA_1.plates_2-5.hsl)
Set(selectivePlateTime, 1000)

//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)

/////////////////////////////////////////////////////////////////


//Set readers to be used
Set(mainReader, Neo)

//--- Scipt for initial steps that don't change ----------------------------------------------------------------------------- 
Set(isExtractingDNA, false)
Set(isGBA_1_exp, true)
Set(isClonalTest, true)
Set(startWithInducer, No)
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.init experiment.Align-TF.lmsf)

//Get strain and plasmid info from file: strain_plasmids.Align-TF.GBA_1.txt

If({queueDirectory}==notAssigned, Set(queueDirectory, {scriptDir}))

Set(msg1, Open the file strain_plasmids.Align-TF.GBA_1.txt from today's folder in the LMSF Queue: {queueDirectory}.\nThen, verify that it contains the appropriate information for this experiment.)
Set(msg2, One strain and three groups of plasmids, 4 each.)

Set(msg5, \n\nThe LMSF Queue is on the JCloud at: \\resdata-smb\JCloud2\Shared_Data\LMSF Queue.)
Set(msg6, \nIt should be pinned to the Quick Access in the Windows file browser.)

If({queueDirectory}=={scriptDir}, Set(msg1, Open the file strain_plasmids.Align-TF.GBA_1.txt and edit it to contain the appropriate information for this experiment.))
If({queueDirectory}=={scriptDir}, Set(msg5, \nThe file should be in the folder: {scriptDir}.))
If({queueDirectory}=={scriptDir}, Set(msg6, ))

UserPrompt(Strain and Plasmids, {msg1}\n{msg2}{msg5}{msg6})

ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\import plasmids.Align-TF.GBA_1.lmsf)

// For this type of experiment, the user is never asked for the inducer or antibiotic info
AddXML(additives, additive)
AddXML(additive, useKey, antibiotic)
AddXML(additive, additiveId, {selector1})
AddXML(additive, concentration, {selector1Stock})

AddXML(additives, additive)
AddXML(additive, useKey, antibiotic)
AddXML(additive, additiveId, {selector2})
AddXML(additive, concentration, {selector2Stock})

AddXML(additives, additive)
AddXML(additive, useKey, antibiotic)
AddXML(additive, additiveId, {selector3})
AddXML(additive, concentration, {selector3Stock})

AddXML(additives, additive)
AddXML(additive, useKey, inducer)
AddXML(additive, additiveId, {inducer1})
AddXML(additive, concentration, {inducer1Stock})

AddXML(additives, additive)
AddXML(additive, useKey, inducer)
AddXML(additive, additiveId, {inducer2})
AddXML(additive, concentration, {inducer2Stock})

AddXML(additives, additive)
AddXML(additive, useKey, inducer)
AddXML(additive, additiveId, {inducer3})
AddXML(additive, concentration, {inducer3Stock})

Set(msg1, {inducer1} stock concentration should be {inducer1Stock}.)
Set(msg1, {msg1}\n{inducer2} stock concentration should be {inducer2Stock}.)
Set(msg1, {msg1}\n{inducer3} stock concentration should be {inducer3Stock}.)
UserPrompt(Inducer Stocks, {msg1})

Set(first_str, The {selector1})
Set(second_str, The {selector2})
Set(third_str, The {selector3})
If({selector1}=={selector2}, Set(first_str, The first {selector1}))
If({selector1}=={selector2}, Set(second_str, The second {selector2}))
If({selector1}=={selector3}, Set(third_str, The third {selector3}))
Set(msg1, {first_str} stock concentration should be {selector1Stock}.)
Set(msg1, {msg1}\n{second_str} stock concentration should be {selector2Stock}.)
Set(msg1, {msg1}\n{third_str} stock concentration should be {selector3Stock}.)
UserPrompt(Antibiotic Stocks, {msg1})

Get(note, note)

GetExpID({startDate}_Align-TF_GBA_1_OD-test)

//review experiment ok/abort dialog
Set(msg1, Review the following, then click 'OK' to accept or 'Abort' to abort and start over:\n\n)

Set(msg2, \tMedia: \t\t\t{media}\n\n \tBacteria: \t\t\t{strain1})
Set(msg2, {msg2}\n\n \tPlasmids:)
Set(msg2, {msg2}\n\t\t{plasmid_1_1}\t{plasmid_2_1}\t{plasmid_3_1})
Set(msg2, {msg2}\n\t\t{plasmid_1_2}\t{plasmid_2_2}\t{plasmid_3_2})
Set(msg2, {msg2}\n\t\t{plasmid_1_3}\t{plasmid_2_3}\t{plasmid_3_3})
Set(msg2, {msg2}\n\t\t{plasmid_1_4}\t{plasmid_2_4}\t{plasmid_3_4})

Set(msg3, \n\n\tInducer 1: \t{inducer1}, stock concentration: {inducer1Stock})
Set(msg3, {msg3}\n\tInducer 2: \t{inducer2}, stock concentration: {inducer2Stock})
Set(msg3, {msg3}\n\tInducer 3: \t{inducer3}, stock concentration: {inducer3Stock})

Set(msg4, \n\n\tSelector 1:\t{selector1}, stock concentration: {selector1Stock})
Set(msg4, {msg4}\n\tSelector 2:\t{selector2}, stock concentration: {selector2Stock})
Set(msg4, {msg4}\n\tSelector 3:\t{selector3}, stock concentration: {selector3Stock})

Set(msg5, \n\n\tExperiment ID: \n\t\t{experimentId}\n \tData directory: \n\t\t{dataDirectory}\n\n \tNotes:\n\t\t{note})
Set(msg6, \n\n\{overNightProtocol}\n{repeatProtocol})
UserPrompt(Review Experiment Details: {experimentId}, {msg1}{msg2}{msg3}{msg4}{msg5}{msg6})

Set(msg1, Set up the STAR deck layout as shown.)
Set(msg1, {msg1}\n\tInducer 1: {inducer1Stock} {inducer1}\t\tSelector 1: {selector1Stock} {selector1})
Set(msg1, {msg1}\n\tInducer 2: {inducer2Stock} {inducer2}\t\tSelector 2: {selector2Stock} {selector2})
Set(msg1, {msg1}\n\tInducer 3: {inducer3Stock} {inducer3}\t\t\tSelector 3: {selector3Stock} {selector3})

UserPrompt(STAR Deck Layout, {msg1}, {scriptDir}\STAR Deck Layout.Align-TF.GBA_1.PNG, 1000)

Set(culture_png, {scriptDir}\Cultures.Align-TF.GBA_1.PNG)
If({isExtractingDNA}==true, Set(culture_png, {scriptDir}\Libraries.Align-TF.GBA_1.PNG))
UserPrompt(Load Cultures, Load the starting bacterial cultures as shown:, {culture_png}, 1000)

//--- Growth Plates 1 and 2 prep and growth ----------------------------------------------------------------------------- 
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.plates 1 and 2.lmsf, lidTestMethod = {hamiltonMethodDir}\Pre-run lid test.No Abgene.hsl)

//--- Growth Plate 3 prep and OD Read from Plate 2 ----------------------------------------------------------------------------- 
// For plate 3, be sure to clear waste tip rack before adding more 300 tips
Set(clear300TipWaste, true)

ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- Growth Plate 4 prep and OD Read from Plate 3 ----------------------------------------------------------------------------- 
Set(clear300TipWaste, true)

ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- Growth Plate 5 prep and OD Read from Plate 4 ----------------------------------------------------------------------------- 

//--- Add 300 uL tips to STAR ---------------------
ReadScript(Common protocol scripts\Need Tips.lmsf, tips1000Need = 0, tips300Need = 80, clearTipRack = true)

Set(clear300TipWaste, false)
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.Repeat.with single OD read.lmsf)

//--- OD Read from Plate 5 and cleanup -------------------------------------------------------------------
ReadScript(GSF-IMS Project\E. coli\Fitness Selection 2\Fitness Selection.plate 5 single OD read.lmsf)
