//Sub-script for plates 1 and 2, steps that never change...

Set(lidTestMethod, {hamiltonMethodDir}\Pre-run lid test.No DNA extraction.hsl)
Set(growthPlatesNeeded, 5)

Set(pipettingCushionTime, 2400)
Set(plate2DilutionFactor, 50)

#InsertVariables

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {lidTestMethod})
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR successfully moved the lids click 'OK' to start the experiment.)
// end lid movement test

//Turn on HHC for plate pre-warming
Set(preHeatTemperature, 67)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{initHHCMethod})
Timer(75)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
Set(msg, Verify that HHC no. 1 is now set to the pre-heat temperature, {preHeatTemperature}, then Click 'OK' to continue.)
UserPrompt(Check Pre-Heat HHC, {msg})


WaitFor(Overlord)
//End User input and Overlord initialization section
//////////////////////////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////////////////////////
//Run the protocol
////////////////////////////////////////////////////////////////////////////////////

//--- 0 ------------------------------------------------------------------------------

//Test readers while 1st plate is pipetting
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)
Set(msg, Plate reader {mainReader} should have its carrier out. \nVerify that the carrier is out and empty, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
Gen5({mainReader}, RunExp, {initProtocol}, pre-run-test, {dataDirectory})

Set(msg, Switch to STAR computer to edit tip counters, then Click 'OK' to continue.)
UserPrompt(Check Readers, {msg})
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Edit Tip Counters.hsl)
WaitFor(S-Cell-STAR)

//--- Plate 1 ------------------------------------------------------------------------------
Set(plateNum, 1)
Set(platesInStack, {growthPlatesNeeded})
Set(spinPlatesInStack, 4)

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack})
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(dilutionFactor, 10)
Set(gradPlateNum, 0)
If({startWithInducer} == Yes, Set(gradPlateNum, 1))
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{startMethod})
Timer({startMethodTime})
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader}, false)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)


Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader No Seal.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {singleReadProtocol}, {experimentId}_single-read_0, {dataDirectory})
Timer({singleReadProtocolTime})
WaitFor(Timer)
WaitFor({mainReader})

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to Reader and Seal.ovp, [Gen5.Reader.Name] "{mainReader}" [Gen5.Reader2.Name] "{mainReader}")
WaitFor(Overlord)


Gen5({mainReader}, RunExp, {overNightProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
GetTimeNow(readStartTime)
Math(readEndTime, {readStartTime} + {overNightProtocolTime})

Set(msg1, Remove bacteria stock from deck and put in bio-waste.)
UserPrompt(Dispose of Bacteria Stock, {msg1}, {scriptDir}\Bacteria stock.PNG, 1000)

// Need to manually add tips here if startWithInducer because the carousel needs all 6 tip shelves already. 
Set(msg1, If running method with DNA extraction, switch to STAR computer and manually add a new rack of 1000 uL tips.)
If({startWithInducer} == Yes, UserPrompt(Add 1000 tips, {msg1}))
If({startWithInducer} == Yes, UserPrompt(Clear tip rack!, Clear tip rack from handoff position on STAR))

//--- Plate 2 ----------------------------------------------------------------------------- 
Math(plateNum, {plateNum} + 1)
Set(DNAPlateNumber, 1)

//Move new plate and tips before WaitFor(Timer) so user can make sure there is no Overlord error
Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack} [STAR.Plate.Handling.Labware.Name] "Tips300" [STAR.Tip.300.Index] {tips300Index})
Math(tips300Index, {tips300Index} - 1)
Math(platesInStack, {platesInStack} - 1)
WaitFor(Overlord)

//Wait for reader to get close to finished before starting pipetting method
Math(pipetteWaitTime, {preHeatPlateTime} + {selectivePlateTime})
Math(pipetteWaitTime, {pipetteWaitTime} + {pipettingCushionTime})
Math(pipetteStartTime, {readEndTime} - {pipetteWaitTime})
Timer({pipetteStartTime})
WaitFor(Timer)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{plateNum}.csv)
Set(dilutionFactor, {plate2DilutionFactor})
Math(gradPlateNum, {gradPlateNum} + 1)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{nonSelectiveGradientMethod})
Timer(800)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

Math(preHeatStartTime, {readEndTime} - {preHeatPlateTime})
Timer({preHeatStartTime})
WaitFor(Timer)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{preHeatPlateMethod})
Timer(600)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({mainReader})
Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from Reader to STAR.ovp, [Gen5.Reader.Name] "{mainReader}")
WaitFor(Overlord)

Gen5({mainReader}, CarrierIn)
WaitFor({mainReader}, false)

Set(keepOldGrowthPlate, false)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{copyPlateMethod})
Timer(180)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

Gen5({mainReader}, CarrierOut)
WaitFor({mainReader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{mainReader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)

Gen5({mainReader}, RunExp, {repeatProtocol}, {experimentId}_growth-plate_{plateNum}a, {dataDirectory})
GetTimeNow(readStartTime)
Math(readEndTime, {readStartTime} + {repeatProtocolTime})
