
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth)

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(120)
WaitFor(Timer)
WaitFor(S-Cell-STAR)


