Set(outFolder, C:\Users\Public\Documents\Experiments\)

Set(neoProt1, \\129.6.167.34\Protocols\GSF-IMS-E-Coli\Growth Plate w Membrane 15m.37C.1C.Ex500Em530.prt)
Set(neoProt2, \\129.6.167.34\Protocols\GSF-IMS-E-Coli\Growth Plate w Membrane 10m.37C.1C.Ex500Em530.prt)

Set(expId1, test-1)
Set(expId2, test-2)

Set(round, 0)

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Test protocols\Both Neos test repeat.lmsf)

ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Test protocols\Both Neos test repeat.lmsf)

//ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Test protocols\Both Neos test repeat.lmsf)

//ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Test protocols\Both Neos test repeat.lmsf)

//ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Test protocols\Both Neos test repeat.lmsf)



