
//Read in commonly used directories
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth)

//Set directories for  .hsl, .opv, and .prt files that are specifc to this experiment
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth)
Set(protocolDir, C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth)


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section

StartPrompt(Overnight Double 2D Gradient Plate Prep, {protocolDir}\Overnight growth.Double 2D gradient.Repeated 4.5 hour growth-list.txt)

Set(msg1, Make sure there is at least one rack of 1000 uL tips in the PAA Carousel (hotel no. 1).\n)
Set(msg2, Make sure there are at least four racks of 300 uL tips in the PAA Carousel (hotel no. 2).\n)
UserPrompt(Tips, {msg1}{msg2}, {lmsfImageDirectory}\Tip Hotels 1-2.png)

//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)

Get(user, user)


UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)


Set(msg1, Set up the STAR deck layout as shown.)
UserPrompt(Media Trough, {msg1}, {protocolDir}\Overnight Double Gradient Layout.PNG)

Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Ensure that the Robot arm is in a safe position and that the Guard Override key is in the 'Off' position.\n)
Set(msg3, Check that all the doors of the S-Cell system are closed.\n)
Set(msg4, Then clisk 'OK' to start the protocol.\n)
UserPrompt(Ready to Start, {msg1}{msg2}{msg3}{msg4}, {lmsfImageDirectory}\dialog-warning.png)

