//isPipetting is a variable passed to the Hamilton Venus method; if isPipetting is true, the STAR will pipette liquids; otherwise the STAR just moves plates around
Set(isPipetting, true)
//isDebugging controls whether or not user debugging prompts/messages are displayed (both in LMSF and Hamilton)
Set(isDebugging, false)

//No DNA extraction for this version of the script
Set(keepOldGrowthPlate, false)

//manualSeal controls whether sealing is manual or automatic
//Set(manualSeal, Yes)
Set(manualSeal, No)

/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Fitness Selection 1)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specifc to this experiment
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
Set(scriptDir, C:\Users\PAA\Documents\LMSF Scheduler\GSF-IMS Project\E. coli\Fitness Selection 1)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Hamilton Venus Methods, in the order that they get run
Set(startMethod, Uniform non-selective plate prep plus starting bacteria.2 strains.hsl)
Set(nonSelectiveGradientMethod, Inducer gradient plate prep.hsl)
Set(preHeatPlateMethod, Pre-heat growth plate.hsl)
//Plate pre-heating method takes 12m:16s to run
Set(preHeatPlateTime, 736)
Set(copyPlateMethod, Dilute-copy plate x-fold with 96-head.hsl)
Set(selectiveGradientMethod, Inducer gradient plus selector plate prep.hsl)
Set(cytometryPrepMethod, Prep cytometry plate.hsl)
Set(cytometryTransferMethod, Transfer cells from old GP to Cytometry Plate.hsl)
//Venus method constrains 200<=cultureVolume<=500
Set(cultureVolume, 500)


/////////////////////////////////////////////////////////////////
//Gen5 protcols to be run and associated timers:
//Set(overNightProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 16h.37C.1C.Ex500Em530.prt)
Set(overNightProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 12h.37C.1C.Ex500Em530.prt)
//overNightProtocolTime = nominal run time + 300
//Set(overNightProtocolTime, 57900)
Set(overNightProtocolTime, 43500)

Set(repeatProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 2h.35m.37C.1C.Ex500Em530.prt)
//repeatProtocolTime = nominal run time + 300
Set(repeatProtocolTime, 9600)

//Gen5 protocol for testing readers at beginning of run to give consistent starting state
Set(initProtocol, {gen5ProtDir}\Growth Plate w Membrane short test.prt)
/////////////////////////////////////////////////////////////////

//Set readers to be used
Set(mainReader, Neo)

/////////////////////////////////////
//This section sets shorter Gen5 protocols for testing, set isTesting to false for actual experiment
Set(isTesting, false)
GetUserYesNo(isTesting, Testing?, Is this a test run (short Gen5 protocols)?)

Set(testProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 1h.37C.1C.prt)
If({isTesting}==Yes, Set(overNightProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 35m.37C.1C.prt))
//overNightProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(overNightProtocolTime, 2400))
If({isTesting}==Yes, Set(repeatProtocol, {gen5ProtDir}\GSF-IMS-E-Coli\Growth Plate w Membrane 30m.37C.1C.prt))
//repeatProtocolTime = nominal run time + 300
If({isTesting}==Yes, Set(repeatProtocolTime, 2100))
/////////////////////////////////////////

/////////////////////////////////////////
//Set any other short-hand dictionary keys that will be used repeatedly
Set(getNewGrowthPlate, {ovpCommDirectory}\Labware\Move Tips and New Growth Plate to STAR.ovp)
/////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input and Overlord initialization section



NewXML(growth plate prep)

Get(user, user)

Get(media, media)


//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.No DNA extraction.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)
UserPrompt(Lid Movement Test, If the STAR sucessfully moved the lids click 'OK' to start the experiment.)
// end lid movement test

//////////////////////////////////////////////////////////////////////////////////////

