/////////////////////////////////////////////////////////////////
//Read in commonly used directories
ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)
/////////////////////////////////////////////////////////////////

/////////////////////////////////////////////////////////////////
//Set directories for  .hsl, .opv, and .prt files that are specifc to this experiment
Set(hamiltonMethodDir, C:\Program Files (x86)\Hamilton\Methods\GSF-IMS Project\E. coli Methods\Cytometry for 6 variants)
Set(ovpDirectory, C:\Program Files (x86)\PAA\Overlord3\Procedures\GSF-IMS\E. coli\Fitness Selection 1)
/////////////////////////////////////////////////////////////////


//////////////////////////////////////////////////////////////////////////////////////
//User input 

UserPrompt(Check STAR Hamilton Run Control, Make sure that the Hamilton Run Control program on the STAR computer is NOT in simulation mode.)


Set(msg1, Close the front cover on the STAR.\n)
Set(msg2, Then click 'OK' to start the experiment.\n)
UserPrompt(Ready to Start, {msg1}{msg2})

//Lid movement test
UserPrompt(Lid Movement Test, Switch to the STAR computer and observe the lid movement test.)

// 1
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 1
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 1
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 1
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 2
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 3
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 4
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 5
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 6
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 7
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 8
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 9
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

// 10
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\Pre-run lid test.hsl)
Timer(100)
WaitFor(Timer)
WaitFor(S-Cell-STAR)




UserPrompt(Lid Movement Test, If the STAR successfully moved the lids click 'OK' to start the experiment.)
// end lid movement test


