ReadScript(C:\Users\PAA\Documents\LMSF Scheduler\Common protocol scripts\Set Common Directories.lmsf)

Set(outFolder, C:\Users\Public\Documents\Experiments\)

Set(neoProt1, \\129.6.167.34\Protocols\Growth Plate w Membrane short test.prt)
Set(neoProt2, \\129.6.167.34\Protocols\GSF-IMS-E-Coli\Growth Plate w Membrane 15m.37C.1C.Ex500Em530.prt)

Set(epochProt1, \\129.6.167.34\Protocols\Growth Plate w Membrane short test.prt)
Set(epochProt2, \\129.6.167.34\Protocols\GSF-IMS-E-Coli\Growth Plate w Membrane 15m.37C.1C.prt)

Set(expId1, test-1)
Set(expId2, test-2)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Set(round, 1)

Gen5(Neo, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(300)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(900)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)



Set(round, 2)

Gen5(Neo, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(300)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(900)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)


Set(round, 3)

Gen5(Neo, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt1}, {expId1}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(300)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Neo2, RunExp, {neoProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch1, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch2, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch3, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})
Gen5(Epoch4, RunExp, {epochProt2}, {expId2}-{round}, {outFolder})

RemoteHam(S-Cell-STAR, RunMethod, {hamiltonTipDir}\Check Tip Counters.hsl)
WaitFor(S-Cell-STAR)

Timer(900)
WaitFor(Timer)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

Gen5(Neo, CarrierOut)
Gen5(Neo2, CarrierOut)
Gen5(Epoch1, CarrierOut)
Gen5(Epoch2, CarrierOut)
Gen5(Epoch3, CarrierOut)
Gen5(Epoch4, CarrierOut)

WaitFor(Neo)
WaitFor(Neo2)
WaitFor(Epoch1)
WaitFor(Epoch2)
WaitFor(Epoch3)
WaitFor(Epoch4)

