Set/ outFolder/ C:\Users\Public\Documents\Experiments\

Set/ neoProt1/ C:\Users\Public\Documents\Protocols\Growth Plate w Membrane 1h.37C.1C.prt
Set/ neoProt2/ C:\Users\Public\Documents\Protocols\Growth Plate w Membrane 3.5h.37C.1C.prt

Set/ epochProt1/ \\129.6.167.34\Protocols\Growth Plate w Membrane 1h.37C.1C.prt
Set/ epochProt2/ \\129.6.167.34\Protocols\Growth Plate w Membrane 3.5h.37C.1C.prt

Set/ expId1/ test-1
Set/ expId2/ test-2


Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ round/ 1

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}

Timer/ 3600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ RunExp/ {neoProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}

Timer/ 12600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ round/ 2

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}

Timer/ 3600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ RunExp/ {neoProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}

Timer/ 12600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ round/ 3

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}

Timer/ 3600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ RunExp/ {neoProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}

Timer/ 12600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ round/ 4

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{round}/ {outFolder}

Timer/ 3600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ RunExp/ {neoProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt2}/ {expId2}-{round}/ {outFolder}

Timer/ 12600
WaitFor/ Timer/ 

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

