Set/ outFolder/ C:\Users\Public\Documents\Experiments\

Set/ neoProt1/ C:\Users\Public\Documents\Protocols\Short Neo Test 1.prt
Set/ neoProt2/ C:\Users\Public\Documents\Protocols\Short Neo Test 2.prt

Set/ epochProt1/ \\129.6.167.34\Protocols\Short Reader Test 1.prt
Set/ epochProt2/ \\129.6.167.34\Protocols\Short Reader Test 2.prt

Set/ expId1/ test-1
Set/ expId2/ test-2



Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ repNum/ 1

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ repNum/ 2

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ repNum/ 3

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Set/ repNum/ 4

Gen5/ Neo/ RunExp/ {neoProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch1/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch2/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch3/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}
Gen5/ Epoch4/ RunExp/ {epochProt1}/ {expId1}-{repNum}/ {outFolder}

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

Gen5/ Neo/ CarrierOut
Gen5/ Epoch1/ CarrierOut
Gen5/ Epoch2/ CarrierOut
Gen5/ Epoch3/ CarrierOut
Gen5/ Epoch4/ CarrierOut

WaitFor/ Neo
WaitFor/ Epoch1
WaitFor/ Epoch2
WaitFor/ Epoch3
WaitFor/ Epoch4

